PsychoPy2experiment version="2022.2.0"
Settings
  Audio lib = pyo
  Data filename = u'data/%s_%s' % (expName, expInfo['date'])
  Experiment info = {'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = musicalMathTest
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        signs = {
            "add": "+",
            "subtract": "-",
            "multiply": "*"
        }

        currQuestion = "What is " + str(NumOne) + " " + signs[CategoryType] + " " + str(NumTwo) + "?"

        # randomise the answer order making a note of the correct answer

        correctLoc = randint(1, 4)

        if correctLoc==1:
            correctKey = 'ansOne'
            ansOneStr = Correct
            ansTwoStr = Incorrect1
            ansThreeStr = Incorrect2
            ansFourStr = Incorrect3

        if correctLoc==2:
            correctKey = 'ansTwo'
            ansOneStr = Incorrect1
            ansTwoStr = Correct
            ansThreeStr = Incorrect2
            ansFourStr = Incorrect3

        if correctLoc==3:
            correctKey = 'ansThree'
            ansOneStr = Incorrect1
            ansTwoStr = Incorrect2
            ansThreeStr = Correct
            ansFourStr = Incorrect3

        if correctLoc==4:
            correctKey = 'ansFour'
            ansOneStr = Incorrect1
            ansTwoStr = Incorrect2
            ansThreeStr = Incorrect3
            ansFourStr = Correct
    TextComponent question
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every repeat] = $currQuestion
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    TextComponent ansOne
      letterHeight = 0.035
      pos = (-0.3, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ansOneStr
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    TextComponent ansTwo
      letterHeight = 0.035
      pos = (-0.1, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ansTwoStr
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    TextComponent ansThree
      letterHeight = 0.035
      pos = (0.1, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ansThreeStr
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    TextComponent ansFour
      letterHeight = 0.035
      pos = (0.3, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ansFourStr
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    CodeComponent processResponse
      Code Type = Auto->JS
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      Begin Routine:
        endSoon = False
      End Routine:
        correctClick = False

        if mouseclickResponse.clicked_name[-1] == correctKey:
            correctClick = True

        thisExp.addData('correctClick', correctClick)

        if (blockTestTimer.getTime()<0):
            trialsMath.finished=True #or trials.finished=1 if you prefer
    MouseComponent mouseclickResponse
      clickable = ansOne, ansTwo, ansThree, ansFour
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent debuginfo
      letterHeight = 0.01
      pos = (-0.4, -0.46)
      startVal [time (s)] = 0.0
      text [set every repeat] = $debugTxt
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  Routine thankyouscreen
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        The Experiment Is Now Complete

        Thank you for your time
  Routine startMusicBlock
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        currQuestionsFile = questionList.pop()

        blockTestTimer.reset()
        blockTestTimer.add(testdurationsec)

        playmusic.setSound(songfilename, secs=testdurationsec, hamming=True)
        playmusic.setVolume(1, log=False)
        playmusic.play(loops=1000)
        playmusic.play()  # start the sound (it finishes automatically)

        debugTxt = songfilename + " " + Speed + " " + Condition
        #debugTxt = musicType + " " + lyrics + " " +  style
  Routine stopmusic
    CodeComponent stopmusiccode
      Code Type = Auto->JS
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      Begin Routine:
        playmusic.stop()
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = The next block will begin in a moment
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  Routine setUpCodeBits
    CodeComponent pyImports
      Code Type = Py
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      Before Experiment:
        import math
        from numpy.random import random, randint, normal, shuffle, uniform
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        questionList = [
            'mathQuestionsA.csv',
            'mathQuestionsB.csv',
            'mathQuestionsC.csv',
            'mathQuestionsD.csv',
            'mathQuestionsE.csv',
            'mathQuestionsF.csv',
            'mathQuestionsG.csv',
            'mathQuestionsH.csv',
            'mathQuestionsI.csv',
            'mathQuestionsJ.csv'
        ]

        shuffle(questionList)
        # randomise the order

        currQuestion=''

        loopNum = 0
      Begin Experiment:
        playmusic = sound.Sound('music\silence.wav', secs=-1, stereo=True, hamming=True,
            name='playmusic')
        playmusic.setVolume(1.0)


        musicList = ['blockAmusic.csv','blockBmusic.csv',]

        session = int(expInfo['session']) - 1

        musicConditions = musicList[session]
  Routine partInfo
    ImageComponent partInfoImage
      image = Slide1.PNG
      size = (1, 1)
      startVal [time (s)] = 0.0
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    MouseComponent partinfomouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine consent
    ImageComponent partInfoImage_2
      image = Slide3.PNG
      size = (1, 1)
      startVal [time (s)] = 0.0
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    MouseComponent partinfomouse_2
      clickable = consentBox
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent consentBox
      fillColor = red
      lineColor = red
      opacity = 0.5
      pos = (0.35, -0.45)
      shape = rectangle
      size = (0.19, 0.06)
      startVal [time (s)] = 0.0
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  Routine instructions
    ImageComponent partInfoImage_3
      image = Slide2.PNG
      size = (1, 1)
      startVal [time (s)] = 0.0
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    MouseComponent partinfomouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine begin
    ImageComponent partInfoImage_4
      image [set every repeat] = $beginImg
      size = (1, 1)
      startVal [time (s)] = 0.0
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    MouseComponent partinfomouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Before Experiment:
        beginImg = 'Slide4.PNG'
        blockTestTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine
      Begin Routine:
        if loopNum==0:
            beginImg = 'Slide4.PNG'
        else:
            beginImg = 'Slide5.PNG'

        loopNum = loopNum + 1


        #blockTestTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine
        #blockTestTimer.reset()
        #blockTestTimer.add(testdurationsec)
  Routine welldonepage
    ImageComponent partInfoImage_5
      image = Slide6.PNG
      size = (1, 1)
      startVal [time (s)] = 0.0
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    MouseComponent partinfomouse_5
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine debrief
    ImageComponent partInfoImage_6
      image = Slide7.PNG
      size = (1, 1)
      startVal [time (s)] = 0.0
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    MouseComponent partinfomouse_6
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  Routine setUpCodeBits
  Routine partInfo
  Routine consent
  Routine instructions
  LoopInitiator musicTypeLoop loopType="TrialHandler"
    conditionsFile = $musicConditions
    isTrials = False
    loopType = random
    nReps = 1
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    Routine begin
    Routine startMusicBlock
    LoopInitiator trialsMath loopType="TrialHandler"
      conditionsFile = $currQuestionsFile
      loopType = random
      nReps = 1
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      Routine trial
    LoopTerminator trialsMath
    Routine stopmusic
  LoopTerminator musicTypeLoop
  Routine welldonepage
  Routine debrief
